PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Image stimuli/Adequate_Sora_25112025.png', 'Image stimuli/Ajar_Sora_25112025.png', 'Image stimuli/Certain_Sora_25112025.png', 'Image stimuli/Good_Sora_25112025 (3).png', 'Image stimuli/Likely_Sora_25112025.png', 'Image stimuli/Open_Sora_25112025.png', 'A_Stimuli_w_path.xlsx', 'B_Stimuli_w_path.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = final_project
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine screener
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    CodeComponent partyvarass
      Code Type = Auto->JS
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      Begin Experiment:
        party = ''
      End Routine:
        rating = partyslider.getRating()

        if rating == 2:
            party = 'Democratic'
        elif rating == 1:
            party = 'Republican'
        else:
            party = 'Other'

        thisExp.addData('party', party)
    SliderComponent partyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = ['Democrat','Republican']
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 1,2
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    TextComponent partyInstructions
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Please indicate which party you more closely affiliate with.
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  Routine trial
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    CodeComponent code
      Code Type = Both
      Before Experiment:
        import random
        cond_files = ['A_Stimuli_w_path.xlsx', 'B_Stimuli_w_path.xlsx']
        cond_file = random.choice(cond_files)
      Before JS Experiment:
        let cond_files = ['A_Stimuli_w_path.xlsx', 'B_Stimuli_w_path.xlsx'];
        let cond_file = cond_files[Math.floor(Math.random() * cond_files.length)];
      Begin JS Routine:
        // Get the original strings from Excel
        let orig_weak = weak_sentence;
        let orig_strong = strong_sentence;

        function insert_party(sentence, party) {
            const roles = ["spokesperson", "official", "representative"];
            for (let r of roles) {
                if (sentence.includes(r)) {
                    return sentence.replace(r, `${party} ${r}`);
                }
            }
            return sentence;
        }

        weak_sentence_party = insert_party(orig_weak, party);
        strong_sentence_party = insert_party(orig_strong, party);
      Begin Routine:
        orig_weak = weak_sentence
        orig_strong = strong_sentence

        def insert_party(sentence, party):
            for role in ["spokesperson", "official", "representative"]:
                if role in sentence:
                    return sentence.replace(role, f"{party} {role}")
            return sentence

        weak_sentence_party = insert_party(orig_weak, party)
        strong_sentence_party = insert_party(orig_strong, party)
    CodeComponent disableSpaceScroll
      Code Type = JS
      Begin JS Experiment:
        function disableSpacebarScroll(e) {
            // Key code 32 is the spacebar
            // e.target == document.body ensures it only affects the main page, not text inputs
            if (e.keyCode === 32 && e.target === document.body) {
                e.preventDefault();
            }
        }

        // Add the event listener when the experiment starts or a routine begins
        window.addEventListener('keydown', disableSpacebarScroll);
    ImageComponent image
      anchor = top-left
      image [set every repeat] = $weak_image
      pos [set every repeat] = (-1, .25)
      size [set every repeat] = (0.70, 0.70)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      anchor = top-right
      image [set every repeat] = $strong_image
      pos = (1, .25)
      size = (0.70, 0.70)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.35)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $weak_sentence_party
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    TextboxComponent errorBox
      bold = False
      color = 0.3961, -0.7333, -0.7333
      editable = False
      letterHeight = 0.05
      pos = (0, -0.35)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (.5, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be seeing utterances from political speakers. Along with these sentences you will see two images. You will select a rating towards which image you believe best represents what the speaker was actually referring to.

        Before we begin, it is important we understand your political background and beliefs in order to properly gauge any potential bias.

        Once you press spacebar, you will being the screener, followed by the trials.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    CodeComponent datapipe
      Code Type = JS
      Begin JS Routine:
        // --------------- SEND DATA TO DATAPIPE / OSF ---------------
        // may need to move to end experiment - running rate differences
        // Turn off PsychoJS default saving (so only DataPipe handles it)
        psychoJS._saveResults = false;

        // Build a filename for this participant
        const expName =
            psychoJS._experimentName || psychoJS._experiment._experimentName;
        const dateStr = psychoJS._experiment._datetime;
        const filename = `${expName}_${dateStr}.csv`;

        // Get all trial data that PsychoJS has stored
        const trialsData = psychoJS._experiment._trialsData;

        // If there's no data, don't bother trying to send anything
        if (!trialsData || trialsData.length === 0) {
          console.warn('No trial data found, nothing to send to DataPipe.');
        } else {

          // --- Convert data to CSV string ---

          // Use the keys of the first trial as the header
          const header = Object.keys(trialsData[0]);
          const rows = [];

          // Header row
          rows.push(header.join(','));

          // One row per trial
          for (let i = 0; i < trialsData.length; i++) {
            const trial = trialsData[i];
            const row = header.map(k => {
              const value = trial[k];

              // Basic CSV-safe stringification
              if (value === undefined || value === null) {
                return '';
              }
              const str = String(value).replace(/"/g, '""');
              return `"${str}"`;
            });
            rows.push(row.join(','));
          }

          const csvString = rows.join('\n');

          console.log('Sending data to DataPipe...', { filename });

          // --- Send to jsPsych DataPipe (which forwards to OSF) ---

          fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
              'Content-Type': 'application/json',
              'Accept': '*/*',
            },
            body: JSON.stringify({
              // Your DataPipe experiment ID (from the screenshot)
              experimentID: '5qSsKEMf3WMV',
              filename: filename,
              data: csvString,
            }),
          })
            .then(response =>
              response
                .json()
                .then(body => ({ ok: response.ok, status: response.status, body }))
            )
            .then(({ ok, status, body }) => {
              if (!ok) {
                console.error('DataPipe error:', status, body);
              } else {
                console.log('DataPipe success:', body);
              }
            })
            .catch(err => {
              console.error('Network or fetch error when sending to DataPipe:', err);
            });
        }
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait while results are saved...
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Flow
  Routine Instructions
  Routine screener
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $cond_file
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine End
